# 1.1 Initialize the main Singles digitizer for the crystal volume
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/insert adder
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/adder/positionPolicy energyWeightedCentroid

# 1.2 Define the integration time for event readout
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/insert readout
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/readout/setDepth 1

# 1.3 Apply the detector's energy resolution (9% for LSO in this model)
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/insert energyResolution
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/energyResolution/fwhm 0.09
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/energyResolution/energyOfReference 511. keV

# 1.4 Apply the energy window (435-585 keV per specifications)
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/insert energyFraming
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/energyFraming/setMin 435. keV
/gate/digitizerMgr/crystal/SinglesDigitizer/Singles/energyFraming/setMax 585. keV

# --------------------------------------------------------
# 2. COINCIDENCE SORTING
# Processes Singles into coincidence events.
# --------------------------------------------------------

# 2.1 Define the main prompt coincidence sorter
/gate/digitizerMgr/CoincidenceSorter/Coincidences/setInputCollection Singles_crystal
/gate/digitizerMgr/CoincidenceSorter/Coincidences/setWindow 4.7 ns
/gate/digitizerMgr/CoincidenceSorter/Coincidences/setOffset 0. ns
/gate/digitizerMgr/CoincidenceSorter/Coincidences/minSectorDifference 1
/gate/digitizerMgr/CoincidenceSorter/Coincidences/MultiplesPolicy takeAllGoods

# 2.2 Define a delayed coincidence sorter for randoms estimation
/gate/digitizerMgr/name delayed
/gate/digitizerMgr/insert CoincidenceSorter
/gate/digitizerMgr/delayed/setInputCollection Singles_crystal
/gate/digitizerMgr/delayed/setWindow 4.7 ns
/gate/digitizerMgr/delayed/setOffset 75.0 ns # Typical delay window offset
/gate/digitizerMgr/delayed/MultiplesPolicy takeAllGoods
